// Defines Global Variables
var PluginName="Spinalcord Mapper";
var MacroName="Normalize Intensity";
var FileExt="TIF";
var MinNbFile=1;
var FolderSuffix="Normalized";
var SubDirArray=newArray("");
CellSeparator= "\t";
LineSeparator="\n";

/////////////// Header, Set Preferences, Options and Housekeeping
// Select All measurements, Invert Y, and use 9 decimals
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack display invert redirect=None decimal=9");
run("Line Width...", "line=1"); // Set Line width as 1
run("Input/Output...", "jpeg=100 gif=-1 file=.txt use copy_row save_column"); // Set Output as Txt and save columns and ignore row numbers
run("Point Tool...", "type=Hybrid color=White size=Large label show counter=0");// Set the Point tool as yellow Medium Circle
run("Colors...", "foreground=white background=black selection=White"); // Set foreground and background colors Selection is yellow
run("Appearance...", "  menu=0 16-bit=Automatic"); // Change appareance of 16bit image as automatic
run("Misc...", "divide=Infinity"); // Make sure Miscellaneous Options are set correctly
run("Overlay Options...", "stroke=White width=2 point=Hybrid size=Large fill=none apply show");
run("Labels...", "color=White font=10 show bold");
call("ij.Prefs.set", "tw.font.size",2);

// Set IJ Size and position
IJPosX=screenWidth*0.1; // The position of ImageJ in X
IJPosY=screenHeight*0; // The position of ImageJ in Y at the top of the screen
IJSizeX=575; // The width of ImageJ toolbar in pixel
IJSizeY=100; // The Height of ImageJ toolbar in pixel
Spacer=20; // A spacer
DummyVariable=eval("script","IJ.getInstance().setLocation("+IJPosX+","+IJPosY+");"); // Adjust the position of the ImageJ toolbar

// Set Toolbar Size and position
ToolbarSizeX=300; // Size of the toolbar
ToolbarSizeY=180; // Size of the toolbar
ToolbarPosX=IJPosX+IJSizeX+Spacer; // Position of the Toolbar is to the right of the ImageJ toolbar
ToolbarPosY=IJPosY; // Position of to the Toolbar in Y
// Check if the toolbar is present
ListWindows=getList("window.titles");
ToolbarPresent=0;
for(n=0; n<ListWindows.length; n++){
  WindowN=ListWindows[n];
  if(WindowN==PluginName+" Toolbar"){
    // If toolbar is present place it next to the IJ toolbar
    selectWindow(PluginName+" Toolbar");
    setLocation(ToolbarPosX,ToolbarPosY);
    ToolbarPresent=1;
  }
}

// Set Threshold Window Size and Position
ThresholdSizeX=290;
ThresholdSizeY=260;
ThresholdPosX=ToolbarPosX; // The Position in X of the threshold window
ThresholdPosY=ToolbarPosY+ToolbarSizeY+Spacer; // Threshold toolbar is just below the plugin toolbar
call("ij.Prefs.set", "threshold.loc", ThresholdPosX+" , "+ThresholdPosY);

// Set ROI Manager Size and Position
ROIManagerSizeX=290;
ROIManagerSizeY=260;
ROIManagerPosX=ToolbarPosX; // The Position in X of the ROI manager window which is to the right of the Treshold widnow
ROIManagerPosY=ThresholdPosY+ThresholdSizeY+Spacer;
call("ij.Prefs.set", "manager.loc", ROIManagerPosX+" , "+ROIManagerPosY);

// Set Results Size and Position to the right of the toolbar until the bottom of Threhsold window
ResultsSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer));
ResultsSizeY=ROIManagerPosY;
ResultsPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
ResultsPosY=ToolbarPosY;
call("ij.Prefs.set", "results.loc", ResultsPosX+" , "+ResultsPosY);
call("ij.Prefs.set", "results.width", ResultsSizeX);
call("ij.Prefs.set", "results.height", ResultsSizeY);
//////////////// Header and Housekeeping





//////////////// General Functions
// Function to Append to an array
function Append(ArrayI, Value) {
  ArrayJ = newArray(ArrayI.length+1);
  for (ValueI=0; ValueI<ArrayI.length; ValueI++)
  ArrayJ[ValueI] = ArrayI[ValueI];
  ArrayJ[ArrayI.length] = Value;
  return ArrayJ;
}

// Function to display a message
var MessageDialogPass;
function MessageDialog(Message){
  MessageDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(Message);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  MessageDialogPass=1;
}

// Function to display an error and propose to Fix it / Try again or to quit
var ErrorDialogPass;
var UserResponseErrorDialog;
function ErrorDialog(MessageError, MessageFix, ErrorResponseArray){
  ErrorDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageError);
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageFix);
  Dialog.setInsets(0, 0, 0);
  Dialog.setInsets(0, 100, 0);
  Dialog.addRadioButtonGroup("", ErrorResponseArray, ErrorResponseArray.length, 1, ErrorResponseArray[0]);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  UserResponseErrorDialog=Dialog.getRadioButton();
  return UserResponseErrorDialog;
}


//////////////// General Functions
// Function to Append to an array
function Append(ArrayI, Value) {
  ArrayJ = newArray(ArrayI.length+1);
  for (ValueI=0; ValueI<ArrayI.length; ValueI++)
  ArrayJ[ValueI] = ArrayI[ValueI];
  ArrayJ[ArrayI.length] = Value;
  return ArrayJ;
}

// Function to display a message
var MessageDialogPass;
function MessageDialog(Message){
  MessageDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(Message);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  MessageDialogPass=1;
}

// Function to display an error and propose to Fix it / Try again or to quit
var ErrorDialogPass;
var UserResponseErrorDialog;
function ErrorDialog(MessageError, MessageFix, ErrorResponseArray){
  ErrorDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageError);
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageFix);
  Dialog.setInsets(0, 0, 0);
  Dialog.setInsets(0, 100, 0);
  Dialog.addRadioButtonGroup("", ErrorResponseArray, ErrorResponseArray.length, 1, ErrorResponseArray[0]);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
  UserResponseErrorDialog=Dialog.getRadioButton();
  return UserResponseErrorDialog;
}


// Function to select an Input Directory containing at least MinNbFile with the correct File Extension FileExt
var SelectInputDirPass; // Switch for the dialog box
var InputDirPath; // Path of the input directory
var ParentDir; // ParentDirectory of the selected input directory
var InputDirName; // Name of the Input Directory
var NbFileWithCorrectExt; // Nb of File with the correct extension in the input directory
var InputItemList; // List of Files and folders in the input directory (all files no matter the extension)
var InputCorrectExtFileList; // List of files with the correct extension
var InputFileList;
var NbFile;
var FileI;
function SelectInputDir(MinNbFile, FileExt){
  // MinNbFile This is the minimum Nb of File to be present in the list to be accepted
  // FileExt This is the File extension as a string example "tif"

  InputDirPath=getDirectory("Select a FOLDER containing at least "+MinNbFile+" "+FileExt+" Files to process."); // Select a Folder
  InputItemList=getFileList(InputDirPath); // List of Item in the selected folder
  ParentDir=File.getParent(InputDirPath)+File.separator;
  InputDirName=File.getName(InputDirPath);

  SelectInputDirPass=0; // Switch for the Function
  NbFileWithCorrectExt=0; // Count of Nb of Files
  BaseNameError=0; // Switch to make sure there is only one "." in the filename
  InputCorrectExtFileList=newArray(0);

  // Evaluate the Nb of File with correct extension and add them to InputCorrectExtFileList
  for (ItemI=0; ItemI<InputItemList.length; ItemI++){
    if(endsWith(toLowerCase(InputItemList[ItemI]), "."+toLowerCase(FileExt))){ // Select files with correct extension
      InputCorrectExtFileList=Append(InputCorrectExtFileList, InputItemList[ItemI]);
    }
  }
  NbFileWithCorrectExt=InputCorrectExtFileList.length;
  if(NbFileWithCorrectExt<MinNbFile){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
    MessageError="Sorry but the Folder: \"" +InputDirName+"\" does not contain at least "+MinNbFile+" "+FileExt+" File.";
    MessageFix=MacroName+" requires a Folder that contains at least "+MinNbFile+" "+FileExt+" File.";
    ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
    MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the Folder: \"" +InputDirName+"\" did not contain at least "+MinNbFile+" "+FileExt+" File.";
    ErrorDialog(MessageError, MessageFix, ErrorResponseArray);

    if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
      exit(MessageQuit);
    } else {

    }
  } else { // if NbFileWithCorrectExt is above or equal MinNbFile Evaluate Filenames
    InputFileList=newArray(0);
    for (FileI=0; FileI<InputCorrectExtFileList.length; FileI++){
      BasenameFileIArray=split(InputCorrectExtFileList[FileI],"."); // Make an array from the filename
      if(BasenameFileIArray.length!=2){// if there is more than one . in the file name abort
        MessageError="Sorry but the "+FileExt+" File:\n\""+InputCorrectExtFileList[FileI]+"\"\ncontains more than one \".\" in its filename.";
        MessageFix=MacroName+" function does NOT allow filenames with more than one unique \".\" used for the file extension.";
        ErrorResponseArray=newArray("Select Another Folder", "Ignore This File", "Cancel and Close");
        MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the File \""+InputCorrectExtFileList[FileI]+"\" contains more than one \".\"\nMake sure filenames have no more than one unique \".\" for the File extension.";
        ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
        if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
          exit(MessageQuit);
        } else if (UserResponseErrorDialog=="Ignore This File"){

        } else if (UserResponseErrorDialog=="Select Another Folder") {
          FileI=InputCorrectExtFileList.length;
          SelectInputDirPass=0;
          ErrorDialogPass=1;
        }
      }else { // If basename is good add it to the InputFileList
        InputFileList=Append(InputFileList, InputCorrectExtFileList[FileI]);
      }
    }
    // Make sure InpuFileList is > MinNbFile
    NbFile=InputFileList.length;
    if(NbFile<MinNbFile && ErrorDialogPass!=1){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
      MessageError="Sorry but the Folder: \"" +InputDirName+"\" does not contain at least "+MinNbFile+" "+FileExt+" File with no more than one \".\" in its filename.";
      MessageFix=MacroName+" requires a Folder that contains at least "+MinNbFile+" "+FileExt+" File with one unique \".\" used for the file extension.";
      ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
      MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the Folder: \"" +InputDirName+"\" did not contain at least "+MinNbFile+" "+FileExt+" File no more than one \".\" in its filename.";
      ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
      if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
        exit(MessageQuit);
      } else {
        SelectInputDirPass=0;
      }
    } else if (ErrorDialogPass==1){
      SelectInputDirPass=0; // InputDir Pass the criteria
    } else {
      SelectInputDirPass=1; // InputDir Pass the criteria
    }
  }
} // End of Function Select InputDir


// Function to create a new output directory
var OutputDirPath; // The path of the output directory
var OutputDirName; // The name of the output directory
function CreateOutputDir(ParentDir, InputDirName, FolderSuffix){ // Folder suffix is a string appended to the input Directory
  OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+File.separator; // Create the outputdirpath
  n=1;
  while(File.exists(OutputDirPath)!=0){ // If the path already exist, increment with _ n until it does not exist
    n++;
    OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+"_"+n+File.separator;
  } // End of making sure the outpudirectory is a new folder
  File.makeDirectory(OutputDirPath); // Create the outpudirectory
  OutputDirName=File.getName(OutputDirPath); // Get the Name of the output directory
}




////// Close Function
function CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName){
  beep();
  // Close Threshold windows if it is open
  if(isOpen("Threshold")){
    selectWindow("Threshold");
    run("Close");
  }//end of if threshold is open
  // Close results windows if it is open
  if(isOpen("Results")){
    run("Clear Results");
    selectWindow("Results");
    run("Close");
  }//end of if Results is open
  //Close the ROI Manager
  if(isOpen("ROI Manager")){
    roiManager("reset");
    selectWindow("ROI Manager");
    run("Close");
  }//End of Close the ROI Manager
  ListImages=getList("image.titles");
  for(n=0; n<ListImages.length; n++){
    ImageN=ListImages[n];
    selectWindow(ListImages);
    run("Close");
  }

  /////////////////////// Closing Dialog Box
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(FileI+" of "+ NbFile+" "+ FileExt+ " Files in the folder:\n"+InputDirName+"\nhave been processed successfully.");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage("Files are saved in the following folder:\n"+OutputDirName+".");
  Dialog.setInsets(0, 0, 0);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  Dialog.show();
}  ///////////////////////// End of Close Function


////////////////////End of General Functions













/////////////////// Specific Functions
var LinearNormalizationPass; // Switch For Linear normalization
var FileI;
function LinearNormalization (InputFileList, OutputPath){
  LinearNormalizationPass=0;
  setBatchMode(true);
  // Process all file in the InputFileList
  for (FileI = 0; FileI < InputFileList.length; FileI++){
    InputFileNameI=InputFileList[FileI];
    InputFilePathI = InputDirPath+InputFileNameI;
    open(InputFilePathI);
    ImageBitDepth=bitDepth();
    //Get Image Info
    ImageInfoArray=split(getImageInfo(),"\n");
    for(RowI=0; RowI<ImageInfoArray.length; RowI++){
      ImageInfoRowI=ImageInfoArray[RowI];
      if(startsWith(ImageInfoRowI, "Bits per pixel: ")){
        //Get the bits per pixel
        ImageType=replace(ImageInfoRowI,"Bits per pixel: ","");
      } else {
        ImageType=" ";
      }
    }

    if(ImageType=="8 (color LUT)"){ // Transform 8bit color image into RGB color
      run("RGB Color");
      run("Make Composite");
    } else if(ImageBitDepth==24){ // If it is a RGB Image convert it to RGB Stack
      run("Make Composite");
    }


    getDimensions(ImageWidth, ImageHeight, NbChannels, NbSlices, NbFrames);
    ImageBitDepth=bitDepth(); // Refresh the bitDepth

    if(NbChannels==1){ // If Only one color
      run("Grays");
      if(NbSlices>1 || NbFrames>1){ // 1 color but more dimensions
        run("Enhance Contrast...", "saturated=0.15 normalize process_all");
      } else{ // if only 1 dimension
        run("Enhance Contrast...", "saturated=0.15 normalize");
      }
    } else { // If more than one color process each Channel separately
      for(ChannelI=1; ChannelI<NbChannels+1; ChannelI++){
        Stack.setChannel(ChannelI);
        run("Enhance Contrast...", "saturated=0.15 normalize process_all");
      }
    }
    saveAs("Tif", OutputPath+File.nameWithoutExtension);
    close();
    showProgress(FileI, InputFileList.length);
  }
  LinearNormalizationPass=1;
}
/////////////////// End Of Specific Functions

InitialMessage=""+MacroName+" will :"
+"\n- Prompt to select a Folder containing at least "+MinNbFile+" "+FileExt+" File to process"
+"\n- Normalize the selected Channels accross all the Files"
+"\n- Save Images as TIF Files in a new folder";

MessageDialog(InitialMessage);

do{
  SelectInputDir(MinNbFile, FileExt);
}while(SelectInputDirPass!=1)

CreateOutputDir(ParentDir, InputDirName, FolderSuffix);

do{
  LinearNormalization(InputFileList, OutputDirPath);
}while(LinearNormalizationPass!=1)

CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName);
