// Defines Global Variables
var PluginName="Spinalcord Mapper";
var MacroName="Resize Image";
var FileExt="TIF";
var MinNbFile=1;
var FolderSuffix="Resized";
CellSeparator= "\t";
LineSeparator="\n";


/////////////// Header, Set Preferences, Options and Housekeeping
// Select All measurements, Invert Y, and use 9 decimals
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack display invert redirect=None decimal=9");
run("Line Width...", "line=1"); // Set Line width as 1
run("Input/Output...", "jpeg=100 gif=-1 file=.txt use copy_row save_column"); // Set Output as Txt and save columns and ignore row numbers
run("Point Tool...", "type=Hybrid color=White size=Large label show counter=0");// Set the Point tool as yellow Medium Circle
run("Colors...", "foreground=white background=black selection=White"); // Set foreground and background colors Selection is yellow
run("Appearance...", "  menu=0 16-bit=Automatic"); // Change appareance of 16bit image as automatic
run("Misc...", "divide=Infinity"); // Make sure Miscellaneous Options are set correctly
run("Overlay Options...", "stroke=White width=2 point=Hybrid size=Large fill=none apply show");
run("Labels...", "color=White font=10 show bold");
call("ij.Prefs.set", "tw.font.size",2);


IJPosX=screenWidth*0.1; // The position of ImageJ in X // Set IJ Size and position
IJPosY=screenHeight*0; // The position of ImageJ in Y at the top of the screen
IJSizeX=570; // The width of ImageJ toolbar in pixel
IJSizeY=100; // The Height of ImageJ toolbar in pixel
Spacer=25; // A spacer
DummyVariable=eval("script","IJ.getInstance().setLocation("+IJPosX+","+IJPosY+");"); // Adjust the position of the ImageJ toolbar

ToolbarSizeX=300;// Set Toolbar Size and position
ToolbarSizeY=200; // Size of the toolbar
ToolbarPosX=IJPosX+IJSizeX+Spacer; // Position of the Toolbar is to the right of the ImageJ toolbar
ToolbarPosY=IJPosY; // Position of to the Toolbar in Y

if(isOpen(PluginName+" Toolbar")){
  selectWindow(PluginName+" Toolbar");
  setLocation(ToolbarPosX,ToolbarPosY);
}

ThresholdSizeX=290;// Set Threshold Window Size and Position
ThresholdSizeY=260;
ThresholdPosX=ToolbarPosX; // The Position in X of the threshold window
ThresholdPosY=ToolbarPosY+ToolbarSizeY+Spacer; // Threshold toolbar is just below the plugin toolbar
call("ij.Prefs.set", "threshold.loc", ThresholdPosX+" , "+ThresholdPosY);

ROIManagerSizeX=250;// Set ROI Manager Size and Position
ROIManagerSizeY=300;
ROIManagerPosX=ToolbarPosX; // The Position in X of the ROI manager window which is to the right of the Treshold widnow
ROIManagerPosY=ThresholdPosY+ThresholdSizeY+Spacer;
call("ij.Prefs.set", "manager.loc", ROIManagerPosX+" , "+ROIManagerPosY);

ResultsSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer)); // Set Results Size and Position to the right of the toolbar until the bottom of Threhsold window
ResultsSizeY=ROIManagerPosY-Spacer;
ResultsPosX=ToolbarPosX+ToolbarSizeX+Spacer;
ResultsPosY=ToolbarPosY;
call("ij.Prefs.set", "results.loc", ResultsPosX+" , "+ResultsPosY);
call("ij.Prefs.set", "results.width", ResultsSizeX);
call("ij.Prefs.set", "results.height", ResultsSizeY);

LogSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer)); // Set Log location
LogSizeY=ROIManagerPosY-Spacer;
LogPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
LogPosY=ToolbarPosY;
call("ij.Prefs.set", "log.loc", LogPosX+" , "+LogPosY);

DebugSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer)); // Set Debug location
DebugSizeY= ROIManagerPosY-Spacer;
DebugPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
DebugPosY=ToolbarPosY;
call("ij.Prefs.set", "debug.loc", DebugPosX+" , "+DebugPosY);

PointToolSizeX=250;// Set point Tool location
PointToolSizeY=300;
PointToolPosX= ROIManagerPosX+ROIManagerSizeX+Spacer;
PointToolPosY= ROIManagerPosY;

BCSizeX=150;// Set Brightness and contrast location
BCSizeY=300;
BCPosX=PointToolPosX+PointToolSizeX+Spacer;
BCPosY=ROIManagerPosY;
call("ij.Prefs.set", "b&c.loc", BCPosX+" , "+BCPosY);
//////////////// Header and Housekeeping

//////////////// General Functions
// Function to Append to an array
function Append(ArrayI, Value) {
  ArrayJ = newArray(ArrayI.length+1);
  for (ValueI=0; ValueI<ArrayI.length; ValueI++)
  ArrayJ[ValueI] = ArrayI[ValueI];
  ArrayJ[ArrayI.length] = Value;
  return ArrayJ;
}

// Function to display a message
var MessageDialogPass;
function MessageDialog(Message){
  MessageDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(Message);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  MessageDialogPass=1;
}

// Function to display an error and propose to Fix it / Try again or to quit
var ErrorDialogPass;
var UserResponseErrorDialog;
function ErrorDialog(MessageError, MessageFix, ErrorResponseArray){
  ErrorDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageError);
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageFix);
  Dialog.setInsets(0, 0, 0);
  Dialog.setInsets(0, 20, 0);
  Dialog.addRadioButtonGroup("", ErrorResponseArray, ErrorResponseArray.length, 1, ErrorResponseArray[0]);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  UserResponseErrorDialog=Dialog.getRadioButton();
  return UserResponseErrorDialog;
}

// Function to select an Input Directory containing at least MinNbFile with the correct File Extension FileExt
var SelectInputDirPass; // Switch for the dialog box
var InputDirPath; // Path of the input directory
var ParentDir; // ParentDirectory of the selected input directory
var InputDirName; // Name of the Input Directory
var NbFileWithCorrectExt; // Nb of File with the correct extension in the input directory
var InputItemList; // List of Files and folders in the input directory (all files no matter the extension)
var InputCorrectExtFileList; // List of files with the correct extension
var InputFileList;
var NbFile;

function SelectInputDir(MinNbFile, FileExt){
  // MinNbFile This is the minimum Nb of File to be present in the list to be accepted
  // FileExt This is the File extension as a string example "tif"
  InputDirPath=getDirectory("Select a FOLDER containing at least "+MinNbFile+" "+FileExt+" Files to process."); // Select a Folder
  InputItemList=getFileList(InputDirPath); // List of Item in the selected folder
  InputItemList=Array.sort(InputItemList); // Sort the List of Item
  ParentDir=File.getParent(InputDirPath)+File.separator;
  InputDirName=File.getName(InputDirPath);

  SelectInputDirPass=0; // Switch for the Function
  NbFileWithCorrectExt=0; // Count of Nb of Files
  BaseNameError=0; // Switch to make sure there is only one "." in the filename
  InputCorrectExtFileList=newArray(0);

  // Evaluate the Nb of File with correct extension and add them to InputCorrectExtFileList
  for (ItemI=0; ItemI<InputItemList.length; ItemI++){
    if(endsWith(toLowerCase(InputItemList[ItemI]), "."+toLowerCase(FileExt))){ // Select files with correct extension
      InputCorrectExtFileList=Append(InputCorrectExtFileList, InputItemList[ItemI]);
    }
  }
  NbFileWithCorrectExt=InputCorrectExtFileList.length;
  if(NbFileWithCorrectExt<MinNbFile){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
    MessageError="Sorry but the Folder:\n\"" +InputDirName+"\"\ndoes not contain at least "+MinNbFile+" "+FileExt+" File.";
    MessageFix=MacroName+" requires a Folder that contains at least "+MinNbFile+" "+FileExt+" File.";
    ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
    MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the Folder:\n\"" +InputDirName+"\"\ndid not contain at least "+MinNbFile+" "+FileExt+" File.";
    ErrorDialog(MessageError, MessageFix, ErrorResponseArray);

    if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
      CleanExit(MessageQuit);
    } else {
    }
  } else { // if NbFileWithCorrectExt is above or equal MinNbFile Evaluate Filenames
    InputFileList=newArray(0);
    for (FileI=0; FileI<InputCorrectExtFileList.length; FileI++){
      BasenameFileIArray=split(InputCorrectExtFileList[FileI],"."); // Make an array from the filename
      if(BasenameFileIArray.length!=2){// if there is more than one . in the file name abort
        MessageError="Sorry but the "+FileExt+" File:\n\""+InputCorrectExtFileList[FileI]+"\"\ncontains more than one \".\" in its filename.";
        MessageFix=MacroName+" function does NOT allow filenames with more than one unique \".\" used for the file extension.";
        ErrorResponseArray=newArray("Select Another Folder", "Ignore This File", "Cancel and Close");
        MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the File \""+InputCorrectExtFileList[FileI]+"\"\ncontains more than one \".\"\nMake sure filenames have no more than one unique \".\" for the File extension.";
        ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
        if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
          CleanExit(MessageQuit);
        } else if (UserResponseErrorDialog=="Ignore This File"){

        } else if (UserResponseErrorDialog=="Select Another Folder") {
          FileI=InputCorrectExtFileList.length;
          SelectInputDirPass=0;
          ErrorDialogPass=1;
        }
      }else { // If basename is good add it to the InputFileList
        InputFileList=Append(InputFileList, InputCorrectExtFileList[FileI]);
      }
    }
    // Make sure InpuFileList is > MinNbFile
    NbFile=InputFileList.length;
    if(NbFile<MinNbFile && ErrorDialogPass!=1){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
      MessageError="Sorry but the Folder:\n\"" +InputDirName+"\"\ndoes not contain at least "+MinNbFile+" "+FileExt+" File with no more than one \".\" in its filename.";
      MessageFix=MacroName+" requires a Folder that contains at least "+MinNbFile+" "+FileExt+" File with one unique \".\" used for the file extension.";
      ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
      MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the Folder:\n\"" +InputDirName+"\"\ndid not contain at least "+MinNbFile+" "+FileExt+" File no more than one \".\" in its filename.";
      ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
      if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
        CleanExit(MessageQuit);
      } else {
        SelectInputDirPass=0;
      }
    } else if (ErrorDialogPass==1){
      SelectInputDirPass=0; // InputDir Pass the criteria
    } else {
      SelectInputDirPass=1; // InputDir Pass the criteria
    }
  }
} // End of Function Select InputDir

// Function to create a new output directory
var OutputDirPath; // The path of the output directory
var OutputDirName; // The name of the output directory
function CreateOutputDir(ParentDir, InputDirName, FolderSuffix){ // Folder suffix is a string appended to the input Directory
  OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+File.separator; // Create the outputdirpath
  n=1;
  while(File.exists(OutputDirPath)!=0){ // If the path already exist, increment with _ n until it does not exist
    n++;
    OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+"_"+n+File.separator;
  } // End of making sure the outpudirectory is a new folder
  File.makeDirectory(OutputDirPath); // Create the outpudirectory
  OutputDirName=File.getName(OutputDirPath); // Get the Name of the output directory
}

////// Close Function
function CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName){
  beep();

  ListImages=getList("image.titles");
  for(n=0; n<ListImages.length; n++){
    ImageN=ListImages[n];
    selectWindow(ImageN);    run("Close");
  }


  /////////////////////// Closing Dialog Box
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(FileI+" of "+ NbFile+" "+ FileExt+ " Files in the folder:\n"+InputDirName+"\nhave been processed successfully.");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage("Files are saved in the following folder:\n"+OutputDirName+".");
  Dialog.setInsets(0, 0, 0);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
}  ///////////////////////// End of Close Function

////// CleanExit Function
function CleanExit(MessageQuit){
  beep();
  if(isOpen("Threshold")){    selectWindow("Threshold");    run("Close");  }//end of if threshold is open
  if(isOpen("Results")){    run("Clear Results");    selectWindow("Results");    run("Close");  }//end of if Results is open
  if(isOpen("ROI Manager")){    roiManager("reset");    selectWindow("ROI Manager");    run("Close");  }//End of Close the ROI Manager
  if(isOpen("B&C")){    selectWindow("B&C");    run("Close");  }//End of Close the Brightness window

  ListImages=getList("image.titles");
  for(n=0; n<ListImages.length; n++){
    ImageN=ListImages[n];
    selectWindow(ImageN);    run("Close");

  }
Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageQuit);
  Dialog.setInsets(0, 0, 0);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  exit();
}  ///////////////////////// End of CleanExit Function

//////////Close UtilityWindows
function CloseUtilityWindows(ListUtilityWindows){
// Typically  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  for(WindowI=0; WindowI<ListUtilityWindows.length; WindowI++){
    UtilityWindowI=ListUtilityWindows[WindowI];
    if(isOpen(UtilityWindowI)){
      if(UtilityWindowI=="Results"){        run("Clear Results");       }
      if(UtilityWindowI=="ROI Manager"){       roiManager("reset");      }
        selectWindow(UtilityWindowI); run("Close");
      }
  }
}
//////////End of Close UtilityWindows
////////////////////End of General Functions

///////// Specific Functions
//Function to get Image Info and Save it into arrays
var GetImageInfoPass;
var DimensionArray;
var NbChannelArray;
var NbSliceArray;
var NbFrameArray;
function GetImageInfo (InputFileList){
GetImageInfoPass=0;
setBatchMode(true);
/////////////////////// Open the arrays to store parameters and measurement data
DimensionArray=newArray(0);
NbChannelArray=newArray(0);
NbSliceArray=newArray(0);
NbFrameArray=newArray(0);

//Loop around each file
for (FileI = 0; FileI < InputFileList.length; FileI++){
InputFileNameI=InputFileList[FileI];
InputFilePathI = InputDirPath+InputFileNameI;
open(InputFilePathI);
//Get the dimension
getDimensions(WidthI, HeightI, ChannelsI, SlicesI, FramesI);
close(); // Close the Image
//Append the Values to the arrays
DimensionArray=Append(DimensionArray,WidthI);
DimensionArray=Append(DimensionArray,HeightI);
NbChannelArray=Append(NbChannelArray,ChannelsI);
NbSliceArray=Append(NbSliceArray,SlicesI);
NbFrameArray=Append(NbFrameArray,FramesI);
showProgress(FileI, InputFileList.length);
}
GetImageInfoPass=1;
}
// Function to prompt for output dimension
var PromptOutputDimensionPass;
var OutputDimension;
// Variables of the function are statistics from arrays filled by previous function
function PromptOutputDimension (MinDimension,MaxDimension,MeanDimension,StDevDimension){
SavedOutputDimension=call("ij.Prefs.get", "Default."+PluginName+"."+MacroName+".OutputDimension", 1000);

PromptOutputDimensionPass=0;
Dialog.create(PluginName+" Information");
Dialog.setInsets(0, 0, 0);
Dialog.addMessage("From the "+NbFile+" "+FileExt+" Files the Image Dimensions are :");
Dialog.setInsets(0, 0, 0);
Dialog.addMessage("Minimum: "+MinDimension+"       Average  : "+MeanDimension);
Dialog.setInsets(0, 0, 0);
Dialog.addMessage("Maximum: "+MaxDimension+"       StDev      : "+StDevDimension);
Dialog.setInsets(10, 0, 0);
Dialog.addMessage("Image Dimension Previously Used : "+SavedOutputDimension+" pixels.");
Dialog.setInsets(10, 0, 0);
Dialog.addMessage("Please indicate the desired Final Image Dimension.");
Dialog.setInsets(5, 0, 0);
Dialog.addNumber("Final Image Dimension : ", MaxDimension,0,8," pixels");
Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
Dialog.show();
OutputDimension=Dialog.getNumber();
OutputDimension=round(OutputDimension);
// Make sure the Dimension is a valid integer
if(isNaN(OutputDimension)==1 || OutputDimension<1){
MessageError="Sorry but the Final Dimension must be a positive number.";
MessageFix=MacroName+" function requires a positive Final Image Dimension.";
ErrorResponseArray=newArray("Select Another Final Image Dimension", "Cancel and Close");
MessageQuit=PluginName+ " Information:\nThe function "+ MacroName+" stopped because the provided Final Image Dimension was not a positive number.";
ErrorDialog(MessageError,MessageFix,ErrorResponseArray);
    if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
      CleanExit(MessageQuit);
    } else {
PromptOutputDimensionPass=0;
    }
} else {
PromptOutputDimensionPass=1;
call("ij.Prefs.set", "Default."+PluginName+"."+MacroName+".OutputDimension",OutputDimension);
}
}//////// End of function PromptNbCh
//////////////////// End of Functions
///////// End Of Specific Functions


InitialMessage=""+MacroName+" will :"
+"\n- Prompt to select a Folder containing at least "+MinNbFile+" "+FileExt+" File to process"
+"\n- Get the largest Dimension from all images"
+"\n- Prompt to adjust the Final Image Dimension"
+"\n\nFor each "+FileExt+" File:"
+"\n- Resize the Image to the defined Final Dimension"
+"\n- Save the Images as TIF Files in a new folder";

MessageDialog(InitialMessage);

do{
SelectInputDir(MinNbFile,FileExt);
}while(SelectInputDirPass!=1)

GetImageInfo(InputFileList);

Array.getStatistics(DimensionArray, MinDimension, MaxDimension, MeanDimension, StDevDimension);
MinDimension=round(MinDimension);
MaxDimension=round(MaxDimension);
MeanDimension=round(MeanDimension);
StDevDimension=round(StDevDimension);

do{
PromptOutputDimension(MinDimension,MaxDimension,MeanDimension,StDevDimension);
}while(PromptOutputDimensionPass!=1)

// Create OutputDirectory with the folder suffix
FolderSuffix=FolderSuffix+"-"+OutputDimension+"pixels";
CreateOutputDir(ParentDir, InputDirName, FolderSuffix);

// Start of the loop going through the list of files in the input folder selected above
setBatchMode(true);
for (FileI = 0; FileI < InputFileList.length; FileI++){
InputFileNameI = InputFileList[FileI];
InputFilePathI = InputDirPath+InputFileNameI;
open(InputFilePathI);
run("Canvas Size...", "width=OutputDimension height=OutputDimension position=Center zero");
saveAs("Tif", OutputDirPath+InputFileNameI);
close();
showProgress(FileI, InputFileList.length);
}
CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName);
